PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Wordpriming_Experiment
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent Studyslider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Test_Phase
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Click to Submit
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    MouseComponent testmouse
      clickable = $submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = excels for word priming/Study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Study_word': 'book'},
      {'Study_word': 'cushion'},
      {'Study_word': 'phone'},
      {'Study_word': 'marble'},
      {'Study_word': 'board'},
      {'Study_word': 'Laptop'},
      {'Study_word': 'Chart'},
      {'Study_word': 'T-shirt'},
      {'Study_word': 'mouse'},
      {'Study_word': 'Pastry'},
      {'Study_word': 'Case'},
      {'Study_word': 'Cruise'},
      {'Study_word': 'Police'},
      {'Study_word': 'Keys'},
      {'Study_word': 'Poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = excels for word priming/test_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'I_pt_p'},
      {'test_word': '_ha_t'},
      {'test_word': 'T_hi_t'},
      {'test_word': '_ou_se'},
      {'test_word': 'P_as_tr_'},
      {'test_word': 'c_s_'},
      {'test_word': '_ry_is_'},
      {'test_word': 'p_li_e'},
      {'test_word': 'k_y_'},
      {'test_word': 'p_st_r'},
      {'test_word': '_o_rd'},
      {'test_word': '_a_bl_'},
      {'test_word': '_ho_e'},
      {'test_word': '_oo_'},
      {'test_word': 'c_s_io_'},
      {'test_word': 'ta_l_'},
      {'test_word': 'p_nc_l'},
      {'test_word': 'v_s_'},
      {'test_word': 'bo_t_e'},
      {'test_word': 'c_m_ra'}]
    Routine Test_Phase
  LoopTerminator trials_2
